PsychoPy2experiment version="2021.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=4D95157C
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = arrow_simon_norep
  logging level = debug
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Routines
  Routine instructions
    TextComponent instruct_text
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Nice job! Now you are about to begin a block of trials in a timed arrow response game. You will respond to arrows like in the first phase of practice, but you will need to time your responses perfectly, like in the second phase of practice.

        As in the first phase of practice, at a random time during the trial, a colored arrow will appear on the right or left side of the screen. You will press a key to report the direction of the arrow.

        On odd numbered trials (1, 3, 5, and so on) you will see a BLUE arrow and you will press the W or O key with your INDEX finger.

        * If the arrow points LEFT, press the W key with your LEFT POINTER finger.
        * If the arrow points RIGHT, press the O key with your RIGHT POINTER finger.

        On even numbered trials (2, 4, 6, and so on) you will see an ORANGE arrow and you will press the Q or P key with your MIDDLE finger.

        * If the arrow points LEFT, press the Q key with your LEFT MIDDLE finger.
        * If the arrow points RIGHT, press the P key with your RIGHT MIDDLE finger.

        As in the second phase of practice, each trial you will see a cross in the center of the screen. The cross will turn into a black dot that flashes three times. After the third flash, a WHITE DOT will appear at the center of the screen.

        Please respond exactly when the WHITE DOT appears.

        When you are ready to begin the first block, please press the SPACE BAR.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial
    TextComponent trial_finger
      letterHeight = 0.02
      pos = (0,.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent fixation
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .6
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    PolygonComponent dot1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .1
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    PolygonComponent dot2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .1
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    PolygonComponent dot3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .1
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    PolygonComponent dot4
      fillColor = $[1,1,1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2.5
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    ImageComponent target
      durationEstim = 1.1
      size = (0.1, 0.1)
      startEstim = 1.5
      startVal [time (s)] = $target_onset
      texture resolution = 512
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    KeyboardComponent trial_resp
      allowedKeys = 'q','w','o','p','esc'
      correctAns = $target_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent trial_code
      Code Type = JS
      Begin JS Experiment:
        accs = [];
        rews = [];
        too_slows = [];
        too_soons = [];
        trial_num = 1;
        color_blue = '#a3d0fb';
        color_orange = '#f3af84';



        // Defaults (i.e., trial 1)
        //target_resp = 'o';
        //target_color = color_blue;
        //target_file = 'right_blue.png'
        //target_pos = [(-0.33), 0];
      Begin JS Routine:
        target_onset = Math.random() + 1.5;

        if (trial_num % 2 === 0) {
            target_resp = even_target_resp;
            target_file = even_target_file;
            target_color = color_orange;
            finger_text = 'MIDDLE';
        } else {
            target_resp = odd_target_resp;
            target_file = odd_target_file;
            target_color = color_blue;
            finger_text = 'POINTER';
        }

        trial_finger.setText(finger_text);
        trial_finger.setColor(target_color);
        fixation.setLineColor(target_color);
        fixation.setFillColor(target_color);
        target.setPos(eval(target_pos));
        target.setImage(target_file);
      End JS Routine:
        rt = trial_resp.rt;
        if (((rt >= 1.4) && (rt <= 1.6))) {
            too_slow = false;
            too_soon = false;
            if ((trial_resp.keys === target_resp)) {
                acc = 1;
                err = 0;
            } else {
                acc = 0;
                err = 1;
            }
        } else {
            if ((rt > 1.6)) {
                too_slow = true;
                too_soon = false;
                acc = 0;
            } else {
                too_slow = false;
                too_soon = true;
                acc = 0;
            }
        }
        accs += acc;
        too_slows += too_slow;
        too_soons += too_soon;

        if (too_slow) {
            feedback_test_msg = "Too Slow";
            feedback_duration = .5;
            feedback_color = 'red';
        } else {
            if (too_soon) {
                feedback_test_msg = "Too Fast";
                feedback_duration = .5;
                feedback_color = 'red';
            } else {
                if ((trial_resp.corr != 1)) {
                    feedback_test_msg = "Wrong key";
                    feedback_duration = .5;
                    feedback_color = 'red'
                } else {
                    feedback_test_msg = "Perfect!";
                    feedback_duration = .5;
                    feedback_color = 'green';
                }
            }
        }

        trial_num = trial_num + 1;

        psychoJS.experiment.addData('target_onset', target_onset)
        psychoJS.experiment.addData('target_color', target_color)
        psychoJS.experiment.addData('target_pos', target_pos)
        psychoJS.experiment.addData('target_file', target_file)
        psychoJS.experiment.addData('target_resp', target_resp)
        psychoJS.experiment.addData('kerr', err)
        psychoJS.experiment.addData('too_slow', too_slow)
        psychoJS.experiment.addData('too_soon', too_soon)
  Routine feedback
    TextComponent feedback_text
      color [set every repeat] = $feedback_color
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = 1
      text [set every repeat] = $feedback_msg
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  Routine feedback_timing
    TextComponent feedback_text_timing
      color [set every repeat] = $feedback_color
      durationEstim = 1
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_msg
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  Routine block_note
    TextComponent block_one_text
      color = black
      letterHeight = 0.02
      startVal [condition] = block_one
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      text:
        Nice job! You completed block 1 of 10. Feel free to relax for a moment. And remember:

        On odd numbered trials (1, 3, 5, and so on) you will see a BLUE arrow and you will press the W or O key with your INDEX finger.

        * If the arrow points LEFT, press the W key with your LEFT POINTER finger.
        * If the arrow points RIGHT, press the O key with your RIGHT POINTER finger.

        On even numbered trials (2, 4, 6, and so on) you will see an ORANGE arrow and you will press the Q or P key with your MIDDLE finger.

        * If the arrow points LEFT, press the Q key with your LEFT MIDDLE finger.
        * If the arrow points RIGHT, press the P key with your RIGHT MIDDLE finger.

        Press the SPACE BAR when you are ready to continue.
    TextComponent block_later_text
      color = black
      letterHeight = 0.02
      startVal [condition] = $block_later
      text [set every repeat] = $block_note_text_msg
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    KeyboardComponent block_note_resp
      allowedKeys = 'space','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent block_note_code
      Code Type = JS
      Begin JS Experiment:
        block_num = 1;
        block_one = true;
      Begin JS Routine:
        trial_num = 1;
      End JS Routine:
        block_num += 1;
        block_later = true;
        block_one = false;
        block_note_text_msg = (("Nice job! You completed block " + block_num.toString()) +
            " of 10. Feel free to relax for a moment. And remember: \n\n* If a BLUE arrow points LEFT, press the W key with your LEFT POINTER finger\n* If a BLUE arrow points RIGHT, press the O key with your RIGHT POINTER finger, and \n\n* If an ORANGE arrow points LEFT, press the Q key with your LEFT MIDDLE finger\n* If an ORANGE arrow points RIGHT, press the P key with your RIGHT MIDDLE finger. \n\nPress the SPACE BAR when you are ready to continue.");
  Routine instructions_simon
    TextComponent instruct_text_simon
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You are about to begin a block of practice trials in a simple arrow response game.

        In each trial, you will stare at a white cross in the center of the screen.

        At a random time during the trial, a colored arrow will appear on the right or left side of the screen. You will next press a key to report the direction of the arrow.

        On odd numbered trials (1, 3, 5, and so on) you will see a BLUE arrow and you will press the W or O key with your INDEX finger.

        * If the arrow points LEFT, press the W key with your LEFT POINTER finger.
        * If the arrow points RIGHT, press the O key with your RIGHT POINTER finger.

        On even numbered trials (2, 4, 6, and so on) you will see an ORANGE arrow and you will press the Q or P key with your MIDDLE finger.

        * If the arrow points LEFT, press the Q key with your LEFT MIDDLE finger.
        * If the arrow points RIGHT, press the P key with your RIGHT MIDDLE finger.

        After each trial, you will receive feedback about how you did. Please try to respond as quickly and accurately as you can.

        When you are ready to begin the block of practice trials, please press the SPACE BAR.
    KeyboardComponent instruct_resp_simon
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine instructions_timing
    TextComponent instruct_text_timing
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Nice job! Now you are about to begin a block of practice trials in a rapid response timing game.

        In this block, there are no colors that you need to respond to. Instead, in each trial you will see a black cross in the center of the screen. Next, the cross will turn into a black dot that flashes three times. After the third flash, a WHITE DOT will appear at the center of the screen.

        Your new goal is to respond exactly when you see the WHITE DOT.

        You can press the Q key with your left middle finger, the W key with your left pointer finger, the O key with your right pointer finger, or the P key with your right middle finger.

        We recommend that you switch between these practice your timing with all fingers.

        After each trial, you will get feedback about how you did.

        We will tell you if you were too slow or too fast.

        When you are ready to begin this block of practice trials, please press the SPACE BAR.
    KeyboardComponent instruct_resp_timing
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine trial_train_simon
    TextComponent train_trial_finger
      letterHeight = 0.02
      pos = (0,.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent fixation_simon
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .6
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    ImageComponent target_simon
      durationEstim = 1
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = $target_onset
      texture resolution = 512
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    KeyboardComponent trial_resp_simon
      allowedKeys = 'q','w','o','p','esc'
      correctAns = $target_resp
      durationEstim = 1
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
      storeCorrect = True
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    CodeComponent trial_code_simon
      Code Type = JS
      Begin JS Experiment:
        train_trial_num = 1;
        color_blue = '#a3d0fb';
        color_orange = '#f3af84';

        // Defaults (i.e., trial 1)
        //target_resp = 'o';
        //target_color = color_blue;
        //target_file = 'right_blue.png'
        //target_pos = [(-0.33), 0];
      Begin JS Routine:
        target_onset = Math.random() * (1 - 0) + 0;

        if (train_trial_num % 2 === 0) {
            target_resp = even_target_resp;
            target_file = even_target_file;
            target_color = color_orange;
            finger_text = 'MIDDLE';
        } else {
            target_resp = odd_target_resp;
            target_file = odd_target_file;
            target_color = color_blue;
            finger_text = 'POINTER';
        }

        train_trial_finger.setText(finger_text);
        train_trial_finger.setColor(target_color);
        fixation_simon.setLineColor(target_color);
        fixation_simon.setFillColor(target_color);
        target_simon.setPos(eval(target_pos));
        target_simon.setImage(target_file);
      End JS Routine:
        if ((trial_resp_simon.keys === target_resp)) {
            err = 0;
            feedback_msg = "Correct!";
            feedback_color = "green";
        } else {
            err = 1;
            feedback_msg = "Incorrect.";
            feedback_color = "red";
        }

        train_trial_num = train_trial_num + 1;

        psychoJS.experiment.addData('kerr', err)
        psychoJS.experiment.addData('target_onset', target_onset)
        psychoJS.experiment.addData('target_color', target_color)
        psychoJS.experiment.addData('target_pos', target_pos)
        psychoJS.experiment.addData('target_file', target_file)
        psychoJS.experiment.addData('target_resp', target_resp)
  Routine trial_train_timing
    PolygonComponent fixation_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .6
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    PolygonComponent dot1_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .1
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    PolygonComponent dot2_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = .1
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    PolygonComponent dot3_timing
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .1
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    PolygonComponent dot4_timing
      fillColor = $[1,1,1]
      nVertices = 1000
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 2.5
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    KeyboardComponent trial_resp_timing
      allowedKeys = 'q','w','o','p','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    CodeComponent trial_code_timing
      Code Type = JS
      End JS Routine:
        rt = trial_resp_timing.rt;
        if ((rt < 2.4)) {
            feedback_msg = "Too fast.";
            feedback_color = "red";
        } else {
            if ((rt > 2.6)) {
                feedback_msg = "Too slow.";
                feedback_color = "red";
            } else {
                if (((rt >= 2.4) && (rt <= 2.6))) {
                    feedback_msg = "Perfect timing!";
                    feedback_color = "green";
                } else {
                    feedback_msg = "No response.";
                    feedback_color = "red";
                }
            }
        }
  Routine completion
    TextComponent complete_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $complete_msg
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    KeyboardComponent complete_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent complete_code
      Code Type = Auto->JS
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  Routine feedback_test
    TextComponent feedback_test_text
      color [set every frame] = $feedback_color
      durationEstim = 1
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [time (s)] = $feedback_duration
      text [set every frame] = $feedback_test_msg
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  Routine block_note_train
    TextComponent train_block_one_text
      color = black
      letterHeight = 0.02
      startVal [condition] = $train_block_one
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      text:
        Nice job! You completed training block 1 of 2. Feel free to relax for a moment. And remember:

        On odd numbered trials (1, 3, 5, and so on) you will see a BLUE arrow and you will press the W or O key with your INDEX finger.

        * If the arrow points LEFT, press the W key with your LEFT POINTER finger.
        * If the arrow points RIGHT, press the O key with your RIGHT POINTER finger.

        On even numbered trials (2, 4, 6, and so on) you will see an ORANGE arrow and you will press the Q or P key with your MIDDLE finger.

        * If the arrow points LEFT, press the Q key with your LEFT MIDDLE finger.
        * If the arrow points RIGHT, press the P key with your RIGHT MIDDLE finger.

        Press the SPACE BAR when you are ready to continue.
    TextComponent train_block_later_text
      color = black
      letterHeight = 0.02
      startVal [condition] = $train_block_later
      text [set every repeat] = $train_block_note_text_msg
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    KeyboardComponent train_block_note_resp
      allowedKeys = 'space','esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent train_block_note_code
      Code Type = JS
      Begin JS Experiment:
        train_block_num = 1;
        train_block_one = true;
      Begin JS Routine:
        trial_num = 1;
      End JS Routine:
        train_block_num += 1;
        train_block_later = true;
        train_block_one = false;
        train_block_note_text_msg = (("Nice job! You completed training block " + train_block_num.toString()) +
            " of 2. Feel free to relax for a moment.\n\nPress the SPACE BAR when you are ready to continue.");
Flow
  Routine instructions_simon
  LoopInitiator blocks_train loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    LoopInitiator trials_train_simon loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = fullRandom
      nReps = 15
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      conditions:
        [OrderedDict([('target_pos', [-0.33, 0]), ('odd_target_resp', 'o'), ('odd_target_file', 'right_blue.png'), ('even_target_file', 'right_orange.png'), ('even_target_resp', 'p')]),
        OrderedDict([('target_pos', [0.33, 0]), ('odd_target_resp', 'o'), ('odd_target_file', 'right_blue.png'), ('even_target_file', 'right_orange.png'), ('even_target_resp', 'p')]),
        OrderedDict([('target_pos', [-0.33, 0]), ('odd_target_resp', 'w'), ('odd_target_file', 'left_blue.png'), ('even_target_file', 'left_orange.png'), ('even_target_resp', 'q')]),
        OrderedDict([('target_pos', [0.33, 0]), ('odd_target_resp', 'w'), ('odd_target_file', 'left_blue.png'), ('even_target_file', 'left_orange.png'), ('even_target_resp', 'q')])]
      Routine trial_train_simon
      Routine feedback
    LoopTerminator trials_train_simon
    Routine block_note_train
  LoopTerminator blocks_train
  Routine instructions_timing
  LoopInitiator trials_train_timing loopType="TrialHandler"
    loopType = sequential
    nReps = 60
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    Routine trial_train_timing
    Routine feedback_timing
  LoopTerminator trials_train_timing
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 10
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = fullRandom
      nReps = 15
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      conditions:
        [OrderedDict([('target_pos', [-0.33, 0]), ('odd_target_resp', 'o'), ('odd_target_file', 'right_blue.png'), ('even_target_file', 'right_orange.png'), ('even_target_resp', 'p')]),
        OrderedDict([('target_pos', [0.33, 0]), ('odd_target_resp', 'o'), ('odd_target_file', 'right_blue.png'), ('even_target_file', 'right_orange.png'), ('even_target_resp', 'p')]),
        OrderedDict([('target_pos', [-0.33, 0]), ('odd_target_resp', 'w'), ('odd_target_file', 'left_blue.png'), ('even_target_file', 'left_orange.png'), ('even_target_resp', 'q')]),
        OrderedDict([('target_pos', [0.33, 0]), ('odd_target_resp', 'w'), ('odd_target_file', 'left_blue.png'), ('even_target_file', 'left_orange.png'), ('even_target_resp', 'q')])]
      Routine trial
      Routine feedback_test
    LoopTerminator trials
    Routine block_note
  LoopTerminator blocks
